PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = death-iat
  keyboardBackend = ioHub
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Routines
  Routine instr_1
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    TextboxComponent instr_1_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.03
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      text = $"In this task, you will see words appear one at a time in the middle of the screen.\n\nSort those words into groups according to the labels that appear in the top right and left corners of the screen.\n\nPress the left E key if you see a word belonging in the group on the left.\n\nPress the right I key if you see a word belonging to the group on the right.\n\nPlease respond as quickly and as accurately as you can.\n\nPay close attention to the group labels on the left and the right, since they will change from block to block.\n\nOn the next screen, you will see the words you will be sorting in this task.\n\nPlease ask the experimenter now if you have any questions.\n\nPress Enter to continue."
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    KeyboardComponent instr_1_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2
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    TextboxComponent instr_2_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.03
      size = (1.5, 1.5)
      startVal [time (s)] = 0.5
      text = $"You will be asked to sort words into the categories of DEATH, LIFE, ME, and NOT ME.\n\nThe words in each category are shown below.\n\nDEATH: Suicide, Die, Dead, Lifeless, Deceased\n\nLIFE: Alive, Live, Thrive, Survive, Breathing\n\nME: Myself, My, Mine, I, Self\n\nNOT ME: Them, They, Theirs, Their, Other\n\nWhen the word in the center corresponds to one of the categories on the left, you will use the E key.\n\nWhen the word in the center corresponds to one of the categories on the right, you will use the I key.\n\nSort the words as quickly as possible while making as few mistakes as possible.\n\nPress Enter to start the task."
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    KeyboardComponent instr_2_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine block_intro
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    TextboxComponent block_intro_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.5, 1.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_instructions
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    TextboxComponent cat_left_text
      bold = True
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $cat_l_text
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    TextboxComponent cat_right_text
      bold = True
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0.7, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $cat_r_text
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    KeyboardComponent block_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        right_answer = 'e' if trial_words[trials.thisN] in left_cat_words else 'i'
      Each Frame:
        show_red_x = False
        answered_correctly = False

        if trial_resp.keys is not None and len(trial_resp.keys) > 0:
            if trial_resp.keys[0] == right_answer:
                answered_correctly = True
                continueRoutine = False
            else:
                show_red_x = True

        if show_red_x and right_answer in trial_resp.keys:
            continueRoutine = False
      End Routine:
        thisExp.addData('was_correct', answered_correctly)
        thisExp.addData('trial_word', trial_words[trials.thisN])
    TextboxComponent cat_left_key_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (-0.7, 0.45)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Press E for:
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    TextboxComponent cat_left_text_2
      bold = True
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (-0.7, 0.35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text [set every repeat] = $cat_l_text
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    TextboxComponent cat_right_key_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0.7, 0.45)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Press I for:
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    TextboxComponent cat_right_text_2
      bold = True
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0.7, 0.35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text [set every repeat] = $cat_r_text
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    KeyboardComponent trial_resp
      allowedKeys = 'e','i'
      correctAns = $right_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
      storeCorrect = True
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    TextboxComponent trial_word
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_words[trials.thisN]
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    TextboxComponent red_x
      bold = True
      color = red
      editable = False
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [condition] = $show_red_x
      text = X
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    TextboxComponent red_x_instr
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.025
      pos = (0, -0.3)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      text = If you press the wrong key, a red X will appear. Press the other key to continue.
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  Routine generate_word_list
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    CodeComponent generate_word_list_code
      Code Type = Auto->JS
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      Begin Routine:
        from random import shuffle

        death_words=["DIE","DEAD","DECEASED","LIFELESS","SUICIDE"]
        life_words=["ALIVE","SURVIVE","LIVE","THRIVE","BREATHING"]
        me_words=["I","MYSELF","MY","MINE","SELF"]
        not_me_words=["THEY","THEM","THEIR","THEIRS","OTHER"]

        trial_words=[]

        show_red_x = False

        if cat_l_key in ['life', 'death']:
            first_half = life_words + death_words
            shuffle(first_half)
            second_half = life_words + death_words
            shuffle(second_half)
            trial_words = first_half + second_half

        elif cat_l_key in ['me', 'notme']:
            first_half = me_words + not_me_words
            shuffle(first_half)
            second_half = me_words + not_me_words
            shuffle(second_half)
            trial_words = first_half + second_half

        elif num_trials == 20:
            trial_words = life_words + death_words + me_words + not_me_words
            shuffle(trial_words)

        elif num_trials == 40:
            first_half = life_words + death_words + me_words + not_me_words
            shuffle(first_half)
            second_half = life_words + death_words + me_words + not_me_words
            shuffle(second_half)
            trial_words = first_half + second_half

        key_to_words_map = {}
        key_to_words_map['death'] = death_words
        key_to_words_map['life'] = life_words
        key_to_words_map['me'] = me_words
        key_to_words_map['notme'] = not_me_words

        left_cat_words = []

        for key in cat_l_key.split(','):
            left_cat_words += key_to_words_map[key]
  Routine outro
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    TextboxComponent outro_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Thank you for completing this task!
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Flow
  Routine instr_1
  Routine instr_2
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $np.random.choice(('blocks1.csv','blocks2.csv','blocks3.csv','blocks4.csv'))
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('num_trials', 20), ('func', 'practice'), ('cat_l_key', 'life'), ('cat_r_key', 'death'), ('cat_l_text', 'LIFE'), ('cat_r_text', 'DEATH'), ('block_instructions', 'Put your index fingers on the E and I keys of your keyboard.\n\nWords representing the categories at the top will appear one-by-one in the middle of the screen. When the word belongs to a category on the left, press the E key; when the word belongs to a category on the right, press the I key. Words belong to only on category. If you make an error, a red X will appear.\n\nGO AS FAST YOU CAN, WHILE MAKING AS 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,
      OrderedDict([('block', 2), ('num_trials', 20), ('func', 'practice'), ('cat_l_key', 'me'), ('cat_r_key', 'notme'), ('cat_l_text', 'ME'), ('cat_r_text', 'NOT ME'), ('block_instructions', 'See above: the categories have changed. The words for sorting have changed as well.The rules, however are the same.\n\nWhen the word belongs to a category on the left, press the E key; when the word belongs to a category on the right, press the I key. Words belong to only one category. If you make an error, a red X will appear. Press the other key to continue.\n\nGO AS FAST AS YOU CAN, WHILE MAKING AS FEW MISTA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,
      OrderedDict([('block', 3), ('num_trials', 20), ('func', 'test'), ('cat_l_key', 'life,me'), ('cat_r_key', 'death,notme'), ('cat_l_text', 'LIFE\nor\nME'), ('cat_r_text', 'DEATH\nor\nNOT ME'), ('block_instructions', 'See above. The four categories you saw separately now appear together. Remember, each word belongs to only one group. Use the E and I keys to categorize words into the four groups on the left and on the right.\n\nGO AS FAST AS YOU CAN, WHILE MAKING AS FEW MISTAKES AS POSSIBLE.\n\nPress space bar when ready.')]),
      OrderedDict([('block', 4), ('num_trials', 40), ('func', 'test'), ('cat_l_key', 'life,me'), ('cat_r_key', 'death,notme'), ('cat_l_text', 'LIFE\nor\nME'), ('cat_r_text', 'DEATH\nor\nNOT ME'), ('block_instructions', 'See above. The four categories now appear together in a new configuration. Remember, each word belongs to only one group. Use the E and I keys to categorize words into the four groups on the left and on the right.\n\nPress space bar when ready.')])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
    Routine block_intro
    Routine generate_word_list
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = num_trials
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine outro
